opentrons/protocol-designer 1.1.1
protocol-schema: 1.0.0
protocol-name: iGEM 2019 Serial Dilution Test
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: right}
labware:
  Trash: {model: fixed-trash, slot: 12}
  opentrons tiprack 300ul (1): {model: opentrons-tiprack-300ul, slot: 1}
  12 Well trough: {model: trough-12row, slot: 2}
  96 Well plate: {model: 96-flat, slot: 3}
pipetteTiprackAssignments:
  p300_single: opentrons-tiprack-300ul
ingredients:
  - Fluorescein Stock Solution
  - PBS Stock solution
ingredLocations:
  12 Well trough:
    Fluorescein Stock Solution {volume: 1000}: A1
    PBS Stock solution {volume: 5000}: A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 200
  path: single
  changeTip: once
  aspirate_labware: 12 Well trough
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A1-D1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: 12 Well trough
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A2-D2, A3-D3, A4-D4, A5-D5, A6-D6, A7-D7, A8-D8, A9-D9, A10-D10, A11-D11, A12-D12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 30
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: A11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: 96 Well plate
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: B2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: B3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: B4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: B4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: B5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: B5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: B6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: B6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: B7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: B7
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: B8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: B8
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: B9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: B9
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: B10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: B10
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: B11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: B11
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: 96 Well plate
  aspirate_wells: C1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: C2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: C2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: C3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: C3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: C4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: C4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: C5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: C5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: C6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: C6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: C7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: C7
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: C8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: C8
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: C9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: C9
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: C10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: C10
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: C11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: C11
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: 96 Well plate
  aspirate_wells: D1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: D2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: D2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: D3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: D3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: D4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: D4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: D5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: D5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: D6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: D6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: D7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: D7
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: D8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: D8
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: D9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: D9
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: D10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: D10
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well plate
  dispense_wells: D11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: 96 Well plate
  aspirate_wells: D11
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
procedure:
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- pick-up-tip: {pipette: p300_single, labware: opentrons tiprack 300ul (1), well: A1}
- aspirate: {pipette: p300_single, volume: 200, labware: 12 Well trough, well: A1, offsetFromBottomMm: 1}
- dispense: {pipette: p300_single, volume: 200, labware: 96 Well plate, well: A1, offsetFromBottomMm: 0.5}
- aspirate: {pipette: p300_single, volume: 200, labware: 12 Well trough, well: A1, offsetFromBottomMm: 1}
- dispense: {pipette: p300_single, volume: 200, labware: 96 Well plate, well: B1, offsetFromBottomMm: 0.5}
- aspirate: {pipette: p300_single, volume: 200, labware: 12 Well trough, well: A1, offsetFromBottomMm: 1}
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